OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:11" => #1
  Channel List = 1:11
  Action = Select
  Channel Matching Method = Smart
#0.Signal stream -> Channel Selector "12" => #2
  Channel List = 12
  Action = Select
  Channel Matching Method = Smart
Input 1=#2, Input 2=#2, Input 3=#2, Input 4=#2, Input 5=#2, Input 6=#2, Input 7=#2, Input 8=#2, Input 9=#2, Input 10=#2, Input 11=#2 -> Signal Merger => #3
Input - A=#1, Input - B=#3 -> Simple DSP => #4
  Equation = a - b / 2
-> Time based epoching => #5
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.25
#0.Signal stream -> Channel Selector "13:16" => #6
  Channel List = 13:16
  Action = Select
  Channel Matching Method = Smart
Input 1=#4, Input 2=#6 -> Signal Merger => #7
Signal=#5, all channels=#7 -> 0xc67a01dc Matlab Scripting => #8
  Box clock frequency in Hz = 4
  Matlab executable (path) = c:/Program Files (x86)/MATLAB/R2015b/bin/win32/MATLAB.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = matlab_Initialize
  Process function = matlab_Process
  Uninitialize function = matlab_Uninitialize
  Number of attempts = 10
  type = Mu
  cond = VLH
  lat = LR
  Threshold = 0.15
  Subject = Filip
  Threshold window length = 8
  Y max = 200
  Y min = 50
  X axis length = 41
  Filename prefix = RAFCC1
#8.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_RestStop
  File to play = c:/Home/rrLab/roboarm/pause.wav
  Loop = False
#8.RoboArm commands -> Sound Player
  PLAY trigger = OVTK_StimulationId_SegmentStart
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = c:/Home/rrLab/roboarm/well_done.wav
  Loop = false
#8.RoboArm commands -> RoboArm
  Robo arm connected = true
  Movement speed <1-100> = 15
  Movement pause (ms) = 2000
  Top Angle <0-90> = 40
  Bottom Angle <0-90> = 0
  EMS connected = true
  EMS stimulation time (ms) = 800
#8.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_00
  STOP trigger = OVTK_StimulationId_RestStop
  File to play = c:/Home/rrLab/roboarm/relax.wav
  Loop = false
#8.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_RestStop
  STOP trigger = OVTK_StimulationId_ExperimentStop
  File to play = c:/Home/rrLab/roboarm/end.wav
  Loop = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#8.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_RestStop
  File to play = c:/Home/rrLab/roboarm/move.wav
  Loop = False
