OpenViBE-Scenario
Comment
  Ukladanie raw signalu
Comment
  end

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:5" => #1
  Channel List = 1:5
  Action = Select
  Channel Matching Method = Smart
#0.Signal stream -> Channel Selector "12" => #2
  Channel List = 12
  Action = Select
  Channel Matching Method = Smart
Input 1=#2, Input 2=#2, Input 8=#2, Input 9=#2, Input 10=#2 -> Signal Merger => #3
Input - A=#1, Input - B=#3 -> Simple DSP
  Equation = a - b / 2
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
-> Matlab Scripting => #6
  Box clock frequency in Hz = 2
  Matlab executable (path) = c:/Program Files (x86)/MATLAB/R2011a/bin/win32/MATLAB.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = matlab_Initialize
  Process function = matlab_Process
  Uninitialize function = matlab_Uninitialize
  Pocet behov = 10
  type = Mu
  cond = VLH
  lat = L
  Threshold = 0.15
  Subjekt = Tony
  Threshold window length = 4
  Y max = 200
  Y min = 50
  X axis length = 41
#6.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_00
  STOP trigger = OVTK_StimulationId_RestStop
  File to play = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/relax.wav
  Loop = false
#6.RoboArm commands -> RoboArm
  Robo arm connected = true
  Movement speed <1-100> = 20
  Top Angle <0-90> = 30
  Bottom Angle <0-90> = 0
#6.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_RestStop
  File to play = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/move.wav
  Loop = False
#6.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_RestStop
  File to play = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/pause.wav
  Loop = False
#6.RoboArm commands -> Sound Player
  PLAY trigger = OVTK_StimulationId_SegmentStart
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/well_done.wav
  Loop = false
#6.Start/stop experiment -> Sound Player
  PLAY trigger = OVTK_StimulationId_RestStop
  STOP trigger = OVTK_StimulationId_ExperimentStop
  File to play = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/end.wav
  Loop = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Signal stream -> Channel Selector "12" => #14
  Channel List = 12
  Action = Select
  Channel Matching Method = Smart
Input 1=#14, Input 2=#14, Input 3=#14, Input 4=#14, Input 5=#14, Input 6=#14, Input 7=#14, Input 8=#14, Input 9=#14, Input 10=#14, Input 11=#14 -> Signal Merger => #15
#0.Signal stream -> Channel Selector "1:11" => #16
  Channel List = 1:11
  Action = Select
  Channel Matching Method = Smart
Input - A=#16, Input - B=#15 -> Simple DSP => #17
  Equation = a - b / 2
Signal=#17 -> EDF File Writer
  Filename = c:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/merania/raw-signal-[$core{date}-$core{time}].edf
