OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:5" => #1
  Channel List = 1:5
  Action = Select
  Channel Matching Method = Smart
#0.Signal stream -> Channel Selector "7:11" => #2
  Channel List = 7:11
  Action = Select
  Channel Matching Method = Smart
Input 1=#1, Input 2=#2 -> Signal Merger => #3
Data=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
