OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:5" => #1
  Channel List = 1:5
  Action = Select
  Channel Matching Method = Smart
#0.Signal stream -> Channel Selector "7:11" => #2
  Channel List = 7:11
  Action = Select
  Channel Matching Method = Smart
Input 1=#1, Input 2=#2 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
-> Matlab Scripting => #5
  Box clock frequency in Hz = 2
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2011a/bin/win32/MATLAB.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = matlab_Initialize
  Process function = matlab_Process
  Uninitialize function = matlab_Uninitialize
#5.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_00
  STOP trigger = OVTK_StimulationId_Label_03
  File to play = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/relax.wav
  Loop = false
#5.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_03
  File to play = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/pause.wav
  Loop = False
#5.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_03
  File to play = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/move.wav
  Loop = False
#5.RoboArm commands -> RoboArm
  Robo arm connected = true
  Movement speed <1-100> = 50
  Top Angle <0-90> = 30
  Bottom Angle <0-90> = 0
Data=#5.Processed signal -> Signal display
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 20
  Vertical Offset = 13
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input stream 1=#5.Processed signal, Input stream 2=#5.RoboArm commands, Input stream 3=#5.Beep stimulations -> Generic stream writer
  Filename = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/merania/record-[$core{date}-$core{time}].ov
  Use compression = false
