OpenViBE-Scenario

0xc67a01dc Generic stream reader => #0
  Filename = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/merania/record-[2015.11.13-10.29.05].ov
#0.Output stream 3 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_00
  STOP trigger = OVTK_StimulationId_Label_03
  File to play = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/relax.wav
  Loop = false
#0.Output stream 3 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_03
  File to play = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/pause.wav
  Loop = False
#0.Output stream 3 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_03
  File to play = C:/Users/bci-ras/Downloads/openvibe-1.1.0-src/roboarm/move.wav
  Loop = False
Data=#0.Output stream 1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
